PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  expName = sheb_replic_pilot_control
  Screen = 1
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Routines
  Routine end_block
    TextComponent text_6
      text [set every repeat] = "End of part " + `$myBlockCount` + ".\nTake a short break." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine display_words
    TextComponent w1
      text [set every repeat] = $word1
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = 0
      letterHeight = 0.1
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    TextComponent w2
      text [set every repeat] = $word2
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA
      letterHeight = 0.1
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    TextComponent w3
      text [set every repeat] = $word3
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA * 2
      letterHeight = 0.1
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    TextComponent w4
      text [set every repeat] = $word4
      stopVal [duration (s)] = $word_duration
      startVal [time (s)] = $SOA * 3
      letterHeight = 0.1
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    TextComponent memory_period2
      stopVal [duration (s)] = $mem_per
      startVal [time (s)] = $SOA * 3 + word_duration
      letterHeight = 0.1
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  Routine training
  Routine init_vars
    CodeComponent code
      Begin Experiment:
        ## Set global variables

        fix_point_duration = 1  # orig = 3

        word_duration = .1  # how long is each word shown for (orig = .1)
        SOA = .5  # stimulus onset asynchrony (orig = .5)

        mem_per = 2 # time during which words have to be kept in memory (orig = 6)

        max_response_time = 30  # max time to repeat words before moving to next trial
        min_response_time = 2  # minimum time before participants can press SPACE to move on
  Routine trial
  Routine fixation
    PolygonComponent point
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.035, 0.05)
      fillColor = $[1,1,1]
      nVertices = 999
      stopVal [duration (s)] = $fix_point_duration
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  Routine instr_exp1
    TextComponent text_8
      text = "It works like this:\n\nYou see four words presented on the screen one after another, followed by a pause. In this pause, you have to keep the four words in your memory in the exact order they were presented. You will then hear a beep. At the beep, you have to repeat the four words out loud. Your voice will be recorded as you repeat the words." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_11
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_exp2
    TextComponent text_9
      text = "The experiment consists of four parts, and there will be a break at the end of each part. You can also take a break between trials if needed.\n\nIf you have questions so far, you may ask the experimenter now." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_12
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine block_instr
    CodeComponent code_4
      Begin Routine:
        myBlockCount += 1


        # If session != 9, load a randomized list (normal case)
        if sess != 9:
            curr_list_targets = path2stimuli + `myBlockCount` + '_pilot_targets.csv'
        else:  # otherwise (if sess==9) use a minimal list
            curr_list_targets = 'minilist_4test.csv'

        #curr_list_targets = path2stimuli + `myBlockCount` + '_pilot_targets.csv'
        print(curr_list_targets)
    TextComponent block_intro
      text [set every repeat] = "Part " + `$myBlockCount` + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine repeat_words
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0
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    SoundComponent sound_2
      sound = 880
      stopVal [duration (s)] = 0.25
      startVal [time (s)] = 0
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  Routine instr_start_real_thing
    TextComponent text_3
      text = "Ready?" + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine train
    TextComponent text_4
      text [set every repeat] = "You will first do some practice trials before starting the real task." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine thanks
    TextComponent text
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The experiment is over.

        Thank you for participating!
    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instr_welcome
    CodeComponent code_2
      Begin Experiment:
        ## Set global (experiment-level) variables

        pptID = int(expInfo['participant'])  # participant ID
        print("participant ID is " + `pptID`)

        sess = int(expInfo['session'])  # session converted to int

        myBlockCount = 0  # count blocks to use in text displays

        # define path to stimuli list; block info is specified in block loop
        path2stimuli = u'..\\stimuli\\presentation_lists_pilot\\p' + `pptID` + '_b'

        ## Duration-related variables (set here rather than in individ elements)

        # If session = 9, then speed through the screens
        if sess != 9:
            fix_point_duration = 3  # orig = 3
            mem_per = 6 # time during which words have to be kept in memory (orig = 6)
        else:  # otherwise use the standard duration
            fix_point_duration = .75  # orig = 3
            mem_per = 1.0 # time during which words have to be kept in memory (orig = 6)

        min_response_time = 0

        ## Other
        cont = "\n\nPress space bar to continue"  # At the end of instructions slides
    TextComponent text_7
      text = "Welcome to this experiment!\n\nIn this task you will see four words in a sequence and you will have to remember them. Shortly after, you will be asked to repeat the words in the exact same order you saw them." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine display_words_training
    TextComponent wt1
      text [set every repeat] = $word1
      stopVal [duration (s)] = 0.200
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent wt2
      text [set every repeat] = $word2
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    TextComponent wt3
      text [set every repeat] = $word3
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent wt4
      text [set every repeat] = $word4
      stopVal [duration (s)] = 0.2
      startVal [time (s)] = 1.5
      letterHeight = 0.1
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    TextComponent memory_period
      stopVal [duration (s)] = $mem_per
      startVal [time (s)] = 1.7
      letterHeight = 0.1
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  Routine block_instr3
    TextComponent text_11
      text [set every repeat] = "You will now practice a few times before starting with the actual task."+ $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_15
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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  Routine beginning_blank
    TextComponent text_10
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_13
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine block_instr2
    TextComponent text_2
      text [set every repeat] = "In each trial, you will see four words flashed one after the other, and your task is to memorize them in the order they were presented. Immediately after the fourth word, you will have to " + $BlockInstructions + " until you hear a beep. At the beep, you will have to repeat the four words." + $cont
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine repeat_training
    TextComponent text_5
      text = If you need more practice, press 'p'; if you are ready to start the actual experiment, press 's'.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_8
      forceEndRoutine = True
      allowedKeys = 'p','s'
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      End Routine:
        if key_resp_8.keys == "s": break  # allow to repeat training until ready (max 20, see loop)
Flow
  Routine beginning_blank
  Routine instr_welcome
  Routine instr_exp1
  Routine instr_exp2
  Routine train
  LoopInitiator training_block loopType="TrialHandler"
    loopType = random
    nReps = 5
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    LoopInitiator word_presentation_training loopType="TrialHandler"
      conditionsFile = ..\conditions_training.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('item', 1), ('type', u'training'), ('word1', u'wait'), ('word2', u'bless'), ('word3', u'blush'), ('word4', u'sigh')]),
        OrderedDict([('item', 2), ('type', u'training'), ('word1', u'like'), ('word2', u'thank'), ('word3', u'stare'), ('word4', u'yell')]),
        OrderedDict([('item', 3), ('type', u'training'), ('word1', u'lick'), ('word2', u'ruin'), ('word3', u'chew'), ('word4', u'soothe')]),
        OrderedDict([('item', 4), ('type', u'training'), ('word1', u'save'), ('word2', u'look'), ('word3', u'stay'), ('word4', u'print')])]
      Routine fixation
      Routine display_words_training
      Routine repeat_words
    LoopTerminator word_presentation_training
    Routine repeat_training
  LoopTerminator training_block
  Routine instr_start_real_thing
  LoopInitiator experimental_blocks loopType="TrialHandler"
    conditionsFile = conditions_block_pilot.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('BlockType', u'CONTROL-PILOT'), ('SOA', 500), ('PresentTime', 100)]),
      OrderedDict([('BlockType', u'CONTROL-PILOT'), ('SOA', 500), ('PresentTime', 200)]),
      OrderedDict([('BlockType', u'CONTROL-PILOT'), ('SOA', 500), ('PresentTime', 300)]),
      OrderedDict([('BlockType', u'CONTROL-PILOT'), ('SOA', 750), ('PresentTime', 100)]),
      OrderedDict([('BlockType', u'CONTROL-PILOT'), ('SOA', 750), ('PresentTime', 200)]),
      OrderedDict([('BlockType', u'CONTROL-PILOT'), ('SOA', 750), ('PresentTime', 300)])]
    Routine block_instr
    LoopInitiator word_presentation loopType="TrialHandler"
      conditionsFile = $curr_list_targets
      loopType = sequential
      nReps = 1
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      Routine fixation
      Routine display_words
      Routine repeat_words
    LoopTerminator word_presentation
    Routine end_block
  LoopTerminator experimental_blocks
  Routine thanks
